CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop input files or folders here and click Apply filters to the file list', 'Suggest dragging files not folders']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This step captures the experiment name and well number from each image.', '***On each run, click Update to verify that the experiment and well # are identified correctly.***']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\//](?P<Experiment>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-H][0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This step organizes the different channel images from each field.', '***On each run, click Update to verify the images are identified correctly.***']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:Cy5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['This pipeline has no groups.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei from the red (PI) channel.']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
    Select the input image:RFP
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.15,1.0
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    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify cells using Cy5 channel']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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cy5
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:Yes
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
IdentifyTertiaryObjects:[module_num:7|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notes:['Identify cytoplasm by subtracting the nucleus from the cell']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enabled:False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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ExpandOrShrinkObjects:[module_num:8|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notes:['Create a nuclear ring, step 1: Shrink the detected nuclei']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enabled:False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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
    Fill holes in objects so that all objects shrink to a single point?:No
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
ExpandOrShrinkObjects:[module_num:9|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notes:['Create a cytoplasmic ring, step 1: Expand the detected nuclei']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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:6
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
IdentifyTertiaryObjects:[module_num:10|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notes:['Create a cytoplasmic ring, step 2: Subtract the nuclear area (minus 1 pixel) from the expanded nuclear area']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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoplasmRings
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:11|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notes:['Measure intensity of target (Cy5) channel in each object type']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
    Select images to measure:Cy5
    Select objects to measure:CytoplasmRings, Nuclei

ExportToSpreadsheet:[module_num:12|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notes:['Export results']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
GrayToColor:[module_num:13|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notes:['Create an overlay image on the green channel, without rescaling the intensity']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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:RFP
    Select the image to be colored green:Cy5
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    Name the output image:Overlay
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:14|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notes:['Overlay the cell and nuclei outlines on the overlay image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Overlay
    Name the output image:OverlayOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:Nuclei
    Select outline color:#FB02FF
    Select objects to display:CytoplasmRings

Resize:[module_num:15|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
    Select the input image:OverlayOutlines
    Name the output image:Resize
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1
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    Interpolation method:Bicubic
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    Additional image count:0

SaveImages:[module_num:16|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notes:['Save the overlay image for evaluating the detection of cells', '*** The base image folder at the bottom should be the folder containing the INPUT images!', 'It will be used to reproduce the folder structure in the output folder.']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
    Select the type of image to save:Image
    Select the image to save:Resize
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
