CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop input files or folders here and click Apply filters to the file list', 'Suggest dragging files not folders']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This step captures the plate and well number from each image.', '***On each run, click Update to verify that the experiment and well # are identified correctly.***']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*_(?P<Plate>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-H][0-9]{1,2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^[A-H][0-9]{1,2}_01_[0-9]{1}_(?P<Field>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This step organizes the different channel images from each field.', '***On each run, click Update to verify the images are identified correctly.***', 'Note: With this method, any bad images can be excluded by removing just one channel image from the input folder  ']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
    Assign a name to:Images matching rules
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    Match metadata:[{'APC': 'Well', 'BFP': 'Well', 'Green': 'Well'}, {'APC': 'Field', 'BFP': 'Field', 'Green': 'Field'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:BFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:APC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['This pipeline has no groups.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei from the green channel which should be constant in all wells.']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
    Select the input image:Green
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.4
    Threshold correction factor:1.15
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GreenPlusAPC
    Image or measurement?:Image
    Select the first image:Green
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:APC
    Multiply the second image by:1.0
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identify cells using APC + Green channels']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GreenPlusAPC
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.03,1.0
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    Log transform before thresholding?:Yes
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
ExpandOrShrinkObjects:[module_num:8|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notes:['Create a nuclear ring, step 1: Shrink the detected nuclei']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enabled:False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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:6
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
IdentifyTertiaryObjects:[module_num:9|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notes:['Identify cytoplasm by subtracting the nucleus from the cell']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enabled:False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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoplasmicRings
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:10|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notes:['Measure intensity of target (green) channel in each object type']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
    Select images to measure:APC, Green
    Select objects to measure:Cells

FilterObjects:[module_num:11|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notes:['exclude objects that have excessive intensity in green channel']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
    Select the objects to filter:Cells
    Name the output objects:FilteredCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedCells
    Select the measurement to filter by:Intensity_MeanIntensity_Green
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:APC, Green
    Select objects to measure:FilteredCells

ExportToSpreadsheet:[module_num:13|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notes:['Export results']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|\g<Plate>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Plate_4_
    Overwrite existing files without warning?:No
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
GrayToColor:[module_num:14|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notes:['Create an overlay image on the green channel, without rescaling the intensity']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
    Select a color scheme:CMYK
    Rescale intensity:No
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    Name the output image:Overlay
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    Select the image to be colored cyan:Green
    Select the image to be colored magenta:APC
    Select the image to be colored yellow:Green
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    Relative weight for the cyan image:1.0
    Relative weight for the magenta image:1.0
    Relative weight for the yellow image:1.0
    Relative weight for the brightness image:1.0
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
OverlayOutlines:[module_num:15|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notes:['Overlay the cell and nuclei outlines on the overlay image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Overlay
    Name the output image:OverlayOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FFFF
    Select objects to display:FilteredCells

Resize:[module_num:16|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
    Select the input image:OverlayOutlines
    Name the output image:ResizeOutlines
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1
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    Interpolation method:Bicubic
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    Additional image count:0

SaveImages:[module_num:17|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notes:['Save the overlay image for evaluating the detection of cells', '*** The base image folder at the bottom should be the folder containing the INPUT images!', 'It will be used to reproduce the folder structure in the output folder.']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
    Select the type of image to save:Image
    Select the image to save:ResizeOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Green
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:tiff
    Output file location:Default Output Folder|\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/Volumes/TS_Current/250110_125752_mikko bfp-gfp-cy5_250110_125752
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    Save with lossless compression?:Yes
